CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:315
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Alexa Fluor 488")
    Name to assign these images:C1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Alexa Fluor 647")
    Name to assign these images:C0
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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enabled:False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
    Select the input image:DAPI
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:No
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    Convert green to gray?:No
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    Convert blue to gray?:Yes
    Name the output image:DAPIGray
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
ColorToGray:[module_num:6|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enabled:False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
    Select the input image:C1
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:No
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    Convert green to gray?:Yes
    Name the output image:Alexa488
    Convert blue to gray?:No
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
ColorToGray:[module_num:7|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enabled:False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
    Select the input image:C0
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:Alexa647
    Convert green to gray?:No
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    Convert blue to gray?:No
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:DAPI
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):100,1000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
SaveCroppedObjects:[module_num:9|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enabled:False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
    Objects:IdentifyPrimaryObjects
    Directory:Default Output Folder|Documents\\Beth Israel Data\\CellProfilerImages
    Saved file format:png

SaveImages:[module_num:10|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:C0
    Select method for constructing file names:Single name
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    Enter single file name:C0
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    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:11|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:C1
    Select method for constructing file names:Single name
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    Enter single file name:C1
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    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureObjectIntensity:[module_num:12|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
    Hidden:3
    Select an image to measure:DAPI
    Select an image to measure:C0
    Select an image to measure:C1
    Select objects to measure:IdentifyPrimaryObjects

MeasureColocalization:[module_num:13|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
    Hidden:3
    Hidden:1
    Select an image to measure:C0
    Select an image to measure:C1
    Select an image to measure:DAPI
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select an object to measure:IdentifyPrimaryObjects

ExportToSpreadsheet:[module_num:14|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Documents\\Beth Israel Data\\CellProfilerImages\\Analysis Outputs
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:IdentifyPrimaryObjects|Intensity_MassDisplacement_DAPI,IdentifyPrimaryObjects|Intensity_MassDisplacement_C1,IdentifyPrimaryObjects|Intensity_MassDisplacement_C0,IdentifyPrimaryObjects|Intensity_MinIntensity_DAPI,IdentifyPrimaryObjects|Intensity_MinIntensity_C1,IdentifyPrimaryObjects|Intensity_MinIntensity_C0,IdentifyPrimaryObjects|Intensity_IntegratedIntensityEdge_DAPI,IdentifyPrimaryObjects|Intensity_IntegratedIntensityEdge_C1,IdentifyPrimaryObjects|Intensity_IntegratedIntensityEdge_C0,IdentifyPrimaryObjects|Intensity_StdIntensity_DAPI,IdentifyPrimaryObjects|Intensity_StdIntensity_C1,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:63x_tla3_rnaps2p488_tile_Stitch-Image Export-04_
    Overwrite existing files without warning?:No
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
SaveImages:[module_num:15|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:OrigGreen
    Select method for constructing file names:Single name
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    Enter single file name:OrigGreen
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    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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